OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  Participant = 999

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Stimulations -> Player Controller "Stop Experiment"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input Experiment Information=#0.Experiment information, Input Signal=#0.Signal stream, Input Stimulations=#0.Stimulations, Input Channel Localisation=#0.Channel localisation, Input Channel Units=#0.Channel units -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/data/record_p-$var{Participant}_$core{date}-$core{time}.ov
  Use compression = false

Keyboard stimulator
  Filename = C:/Users/erang/Desktop/Oddball/ov_experiment/scenarios/config/buttons.txt
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Number_1B
  Stimulation range end = OVTK_StimulationId_Number_1B
-> Lua Stimulator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/main.lua
-> Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_02
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/image_display_config.xml
#5 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_StimulationId_Label_03
  Stimulation range end(1) = OVTK_StimulationId_Label_03
-> Sound Player 1
  PLAY trigger = OVTK_StimulationId_Label_D1
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/1.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_1_config.xml
#5 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_StimulationId_Label_03
  Stimulation range end(1) = OVTK_StimulationId_Label_03
-> Sound Player 2
  PLAY trigger = OVTK_StimulationId_Label_D2
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/2.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_2_config.xml
